// LSO principal cell + ascending lateral-lemniscus ACTIVE axon.
// Generated by MSO_models/build_lso_axon.py — DO NOT edit by hand.
// Dendrites: parasagittal (y-x) plane, primaries along +-y (rostrocaudal).
// Axon: rostro-dorsal AXON_DIR=[0.707, 0.707, 0.0] (+y rostral, +x dorsal); AIS + 26 x (internode 150 um + node 1 um) ~= 3951 um.
// Active nodes/AIS (nax); passive low-cm myelin internodes.

create soma, dend_A, dend_B, dend_C, ais
create node[26], internode[26]
objref axon_nodes, axon_internodes
axon_nodes      = new SectionList()
axon_internodes = new SectionList()

access soma

// soma (L = 27 um, dia = 12 um), elongated along y
soma {
    nseg = 1
    Ra   = 150
    cm   = 1.0
    insert pas   g_pas = 2.0e-3   e_pas = -63.0
    insert klt   gbar_klt = 0.010
    insert kht   gbar_kht = 0.010
    insert ih    gbar_ih = 0.0005
    insert nax   gbar_nax = 0.10   ena = 55.0
    ek = -77.0
    insert lso_ahp   gbar_lso_ahp = 0.002
    pt3dadd(0.0000, -13.5000, 0.0000, 12)
    pt3dadd(0.0000, 13.5000, 0.0000, 12)
}

dend_A {
    nseg = 29
    Ra = 150   cm = 1.0
    insert pas   g_pas = 2.0e-3   e_pas = -63.0
    insert klt   gbar_klt = 0.002
    insert ih    gbar_ih = 0.0001
    ek = -77.0
    pt3dadd(0.0000, 13.5000, 0.0000, 3.5)
    pt3dadd(0.0000, 413.5000, 0.0000, 1.5)
}

dend_B {
    nseg = 29
    Ra = 150   cm = 1.0
    insert pas   g_pas = 2.0e-3   e_pas = -63.0
    insert klt   gbar_klt = 0.002
    insert ih    gbar_ih = 0.0001
    ek = -77.0
    pt3dadd(0.0000, -13.5000, 0.0000, 3.5)
    pt3dadd(0.0000, -413.5000, 0.0000, 1.5)
}

dend_C {
    nseg = 15
    Ra = 150   cm = 1.0
    insert pas   g_pas = 2.0e-3   e_pas = -63.0
    insert klt   gbar_klt = 0.002
    insert ih    gbar_ih = 0.0001
    ek = -77.0
    pt3dadd(0.0000, 0.0000, 0.0000, 3)
    pt3dadd(213.0000, 0.0000, 0.0000, 1.5)
}

// Axon initial segment (active, high Na for AP initiation)
ais {
    nseg = 5
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(9.5459, 9.5459, 0.0000, 1.5)
    pt3dadd(27.2236, 27.2236, 0.0000, 1.5)
}

internode[0] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(27.2236, 27.2236, 0.0000, 1.5)
    pt3dadd(133.2896, 133.2896, 0.0000, 1.5)
    axon_internodes.append()
}
node[0] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(133.2896, 133.2896, 0.0000, 1)
    pt3dadd(133.9967, 133.9967, 0.0000, 1)
    axon_nodes.append()
}
internode[1] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(133.9967, 133.9967, 0.0000, 1.5)
    pt3dadd(240.0628, 240.0628, 0.0000, 1.5)
    axon_internodes.append()
}
node[1] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(240.0628, 240.0628, 0.0000, 1)
    pt3dadd(240.7699, 240.7699, 0.0000, 1)
    axon_nodes.append()
}
internode[2] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(240.7699, 240.7699, 0.0000, 1.5)
    pt3dadd(346.8359, 346.8359, 0.0000, 1.5)
    axon_internodes.append()
}
node[2] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(346.8359, 346.8359, 0.0000, 1)
    pt3dadd(347.5430, 347.5430, 0.0000, 1)
    axon_nodes.append()
}
internode[3] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(347.5430, 347.5430, 0.0000, 1.5)
    pt3dadd(453.6090, 453.6090, 0.0000, 1.5)
    axon_internodes.append()
}
node[3] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(453.6090, 453.6090, 0.0000, 1)
    pt3dadd(454.3161, 454.3161, 0.0000, 1)
    axon_nodes.append()
}
internode[4] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(454.3161, 454.3161, 0.0000, 1.5)
    pt3dadd(560.3821, 560.3821, 0.0000, 1.5)
    axon_internodes.append()
}
node[4] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(560.3821, 560.3821, 0.0000, 1)
    pt3dadd(561.0892, 561.0892, 0.0000, 1)
    axon_nodes.append()
}
internode[5] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(561.0892, 561.0892, 0.0000, 1.5)
    pt3dadd(667.1552, 667.1552, 0.0000, 1.5)
    axon_internodes.append()
}
node[5] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(667.1552, 667.1552, 0.0000, 1)
    pt3dadd(667.8624, 667.8624, 0.0000, 1)
    axon_nodes.append()
}
internode[6] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(667.8624, 667.8624, 0.0000, 1.5)
    pt3dadd(773.9284, 773.9284, 0.0000, 1.5)
    axon_internodes.append()
}
node[6] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(773.9284, 773.9284, 0.0000, 1)
    pt3dadd(774.6355, 774.6355, 0.0000, 1)
    axon_nodes.append()
}
internode[7] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(774.6355, 774.6355, 0.0000, 1.5)
    pt3dadd(880.7015, 880.7015, 0.0000, 1.5)
    axon_internodes.append()
}
node[7] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(880.7015, 880.7015, 0.0000, 1)
    pt3dadd(881.4086, 881.4086, 0.0000, 1)
    axon_nodes.append()
}
internode[8] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(881.4086, 881.4086, 0.0000, 1.5)
    pt3dadd(987.4746, 987.4746, 0.0000, 1.5)
    axon_internodes.append()
}
node[8] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(987.4746, 987.4746, 0.0000, 1)
    pt3dadd(988.1817, 988.1817, 0.0000, 1)
    axon_nodes.append()
}
internode[9] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(988.1817, 988.1817, 0.0000, 1.5)
    pt3dadd(1094.2477, 1094.2477, 0.0000, 1.5)
    axon_internodes.append()
}
node[9] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1094.2477, 1094.2477, 0.0000, 1)
    pt3dadd(1094.9549, 1094.9549, 0.0000, 1)
    axon_nodes.append()
}
internode[10] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1094.9549, 1094.9549, 0.0000, 1.5)
    pt3dadd(1201.0209, 1201.0209, 0.0000, 1.5)
    axon_internodes.append()
}
node[10] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1201.0209, 1201.0209, 0.0000, 1)
    pt3dadd(1201.7280, 1201.7280, 0.0000, 1)
    axon_nodes.append()
}
internode[11] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1201.7280, 1201.7280, 0.0000, 1.5)
    pt3dadd(1307.7940, 1307.7940, 0.0000, 1.5)
    axon_internodes.append()
}
node[11] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1307.7940, 1307.7940, 0.0000, 1)
    pt3dadd(1308.5011, 1308.5011, 0.0000, 1)
    axon_nodes.append()
}
internode[12] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1308.5011, 1308.5011, 0.0000, 1.5)
    pt3dadd(1414.5671, 1414.5671, 0.0000, 1.5)
    axon_internodes.append()
}
node[12] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1414.5671, 1414.5671, 0.0000, 1)
    pt3dadd(1415.2742, 1415.2742, 0.0000, 1)
    axon_nodes.append()
}
internode[13] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1415.2742, 1415.2742, 0.0000, 1.5)
    pt3dadd(1521.3402, 1521.3402, 0.0000, 1.5)
    axon_internodes.append()
}
node[13] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1521.3402, 1521.3402, 0.0000, 1)
    pt3dadd(1522.0473, 1522.0473, 0.0000, 1)
    axon_nodes.append()
}
internode[14] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1522.0473, 1522.0473, 0.0000, 1.5)
    pt3dadd(1628.1134, 1628.1134, 0.0000, 1.5)
    axon_internodes.append()
}
node[14] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1628.1134, 1628.1134, 0.0000, 1)
    pt3dadd(1628.8205, 1628.8205, 0.0000, 1)
    axon_nodes.append()
}
internode[15] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1628.8205, 1628.8205, 0.0000, 1.5)
    pt3dadd(1734.8865, 1734.8865, 0.0000, 1.5)
    axon_internodes.append()
}
node[15] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1734.8865, 1734.8865, 0.0000, 1)
    pt3dadd(1735.5936, 1735.5936, 0.0000, 1)
    axon_nodes.append()
}
internode[16] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1735.5936, 1735.5936, 0.0000, 1.5)
    pt3dadd(1841.6596, 1841.6596, 0.0000, 1.5)
    axon_internodes.append()
}
node[16] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1841.6596, 1841.6596, 0.0000, 1)
    pt3dadd(1842.3667, 1842.3667, 0.0000, 1)
    axon_nodes.append()
}
internode[17] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1842.3667, 1842.3667, 0.0000, 1.5)
    pt3dadd(1948.4327, 1948.4327, 0.0000, 1.5)
    axon_internodes.append()
}
node[17] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(1948.4327, 1948.4327, 0.0000, 1)
    pt3dadd(1949.1398, 1949.1398, 0.0000, 1)
    axon_nodes.append()
}
internode[18] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(1949.1398, 1949.1398, 0.0000, 1.5)
    pt3dadd(2055.2059, 2055.2059, 0.0000, 1.5)
    axon_internodes.append()
}
node[18] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2055.2059, 2055.2059, 0.0000, 1)
    pt3dadd(2055.9130, 2055.9130, 0.0000, 1)
    axon_nodes.append()
}
internode[19] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2055.9130, 2055.9130, 0.0000, 1.5)
    pt3dadd(2161.9790, 2161.9790, 0.0000, 1.5)
    axon_internodes.append()
}
node[19] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2161.9790, 2161.9790, 0.0000, 1)
    pt3dadd(2162.6861, 2162.6861, 0.0000, 1)
    axon_nodes.append()
}
internode[20] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2162.6861, 2162.6861, 0.0000, 1.5)
    pt3dadd(2268.7521, 2268.7521, 0.0000, 1.5)
    axon_internodes.append()
}
node[20] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2268.7521, 2268.7521, 0.0000, 1)
    pt3dadd(2269.4592, 2269.4592, 0.0000, 1)
    axon_nodes.append()
}
internode[21] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2269.4592, 2269.4592, 0.0000, 1.5)
    pt3dadd(2375.5252, 2375.5252, 0.0000, 1.5)
    axon_internodes.append()
}
node[21] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2375.5252, 2375.5252, 0.0000, 1)
    pt3dadd(2376.2323, 2376.2323, 0.0000, 1)
    axon_nodes.append()
}
internode[22] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2376.2323, 2376.2323, 0.0000, 1.5)
    pt3dadd(2482.2984, 2482.2984, 0.0000, 1.5)
    axon_internodes.append()
}
node[22] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2482.2984, 2482.2984, 0.0000, 1)
    pt3dadd(2483.0055, 2483.0055, 0.0000, 1)
    axon_nodes.append()
}
internode[23] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2483.0055, 2483.0055, 0.0000, 1.5)
    pt3dadd(2589.0715, 2589.0715, 0.0000, 1.5)
    axon_internodes.append()
}
node[23] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2589.0715, 2589.0715, 0.0000, 1)
    pt3dadd(2589.7786, 2589.7786, 0.0000, 1)
    axon_nodes.append()
}
internode[24] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2589.7786, 2589.7786, 0.0000, 1.5)
    pt3dadd(2695.8446, 2695.8446, 0.0000, 1.5)
    axon_internodes.append()
}
node[24] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2695.8446, 2695.8446, 0.0000, 1)
    pt3dadd(2696.5517, 2696.5517, 0.0000, 1)
    axon_nodes.append()
}
internode[25] {
    nseg = 5
    Ra = 150.0
    cm = 0.01
    insert pas   g_pas = 1e-05   e_pas = -63.0
    pt3dadd(2696.5517, 2696.5517, 0.0000, 1.5)
    pt3dadd(2802.6177, 2802.6177, 0.0000, 1.5)
    axon_internodes.append()
}
node[25] {
    nseg = 1
    Ra = 150.0
    cm = 1.0
    insert pas   g_pas = 0.002   e_pas = -63.0
    insert nax   gbar_nax = 0.5   ena = 55.0
    insert klt   gbar_klt = 0.01
    insert kht   gbar_kht = 0.015
    insert ih    gbar_ih = 0.0005
    ek = -77.0
    pt3dadd(2802.6177, 2802.6177, 0.0000, 1)
    pt3dadd(2803.3248, 2803.3248, 0.0000, 1)
    axon_nodes.append()
}

connect dend_A(0), soma(1)
connect dend_B(0), soma(0)
connect dend_C(0), soma(0.5)
connect ais(0),    soma(0.5)
connect internode[0](0), ais(1)
connect node[0](0),      internode[0](1)
for i = 1, 25 {
    connect internode[i](0), node[i-1](1)
    connect node[i](0),      internode[i](1)
}

access soma
